PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = MTtestbed
  keyboardBackend = ioHub
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Routines
  Routine WelcomeScreen
    TextComponent welcome_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome, instructions go here.

        Press SPACE to start the experiment
    KeyboardComponent welcome_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Trial
    TextComponent intrText
      letterHeight = 0.05
      pos = (0.3, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Uncertainty is 40
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    ImageComponent RefStim
      image = stim/ph4.png
      pos = (0, 0.3)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent TargetStim
      image [set every frame] = $visStim
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    TextboxComponent EstResp
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = True
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'return'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent textboxText
      letterHeight = 0.05
      pos = (0.0, -0.2)
      startVal [time (s)] = 0.0
      text = Enter estimate here
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Flow
  Routine WelcomeScreen
  LoopInitiator TrialsLoop loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'visStim': 'stim\\ph1'},
      {'visStim': 'stim\\ph2'},
      {'visStim': 'stim\\ph3'},
      {'visStim': 'stim\\ph4'},
      {'visStim': 'stim\\ph5'},
      {'visStim': 'stim\\ph6'},
      {'visStim': 'stim\\ph7'}]
    Routine Trial
  LoopTerminator TrialsLoop
